<PlusConfiguration version="2.0">

  <DataCollection StartupDelaySec="2.0" >
    <DeviceSet 
      Name="PlusServer: ThorLabs spectrometer"
      Description="Broadcasting acquired spectrum through OpenIGTLink. First image row contains wavelength value, second image row contains intensities." />
    <Device
      Id="VideoDevice" 
      Type="ThorLabsVideo"
          AcquisitionRate="30"
	  IntegrationTimeSec="0.025"
	  AveragedItemsForFiltering="1"
	  > <!-- IntegrationTimeSec default="0.05" --> <!-- AcquisitionRate Default="30" --> <!--  AveragedItemsForFiltering Default="20"-->
      <DataSources>
        <DataSource Type="Video" Id="Video" />
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="VideoStream" />
      </InputChannels>
    </Device>
  </DataCollection>
 
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="VideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Image" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
